<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Project file only)"
      Description="Tools: (1) Probe, (2) Needle, (3) Patient (upper right markers), (4) Stylus."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="Tracker_OptitrackDuo_ProjectFile.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Patient" />
        <DataSource Type="Tool" Id="Stylus" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Needle" />
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Patient" />
        <DataSource Type="Tool" Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18945"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
        <Transform Name="NeedleToTracker" />
        <Transform Name="TrackerToStylus" />
        <Transform Name="TrackerToProbe" />
        <Transform Name="PatientToTracker" />
        <Transform Name="TrackerToPatient" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>