<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: OptiTrack (Project file and additional rigid body TRA files)"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="MotiveProject_Stylus-Probe.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" RigidBodyFile="Stylus.tra" />
        <DataSource Type="Tool" Id="Probe" RigidBodyFile="Probe.tra" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Probe" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18945"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
        <Transform Name="ProbeToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>