<PlusConfiguration version="2.3" PlusRevision="Plus-2.0.0.2801">

  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="Replay US data. Elbow." Description="Replays tracked ultrasound sweep recorded in the lower the humerus area. Tracked objects: Probe, Reference, Stylus. Image is sent in the Reference coordinate system."/>
    
    <Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"
      SequenceFile="ElbowUltrasoundSweep.mha"
      UseData="IMAGE_AND_TRANSFORM"
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" BufferSize="100" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.mhd"
      EnableCapturing="FALSE"
      EnableCompression="FALSE"
      FrameBufferSize="50">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Ultrasound" To="Probe"
      Matrix="
        1 0 0 0
        0 1 0 0
        0 0 1 0
        0 0 0 1" />
    <Transform From="Image" To="Ultrasound"
      Matrix="
        0.12913 -0.109897 0.085048  -38.1853
        0.0705074 -0.04823  -0.169374 -50.2865
        0.119746  0.146906  0.00801597  82.2645
        0 0 0 1" />
    <Transform From="Image" To="TransdPixel"
      Matrix="
        1 0 0 -260
        0 1 0 -50
        0 0 1 0
        0 0 0 1" />
    <Transform From="TransdPixel" To="Transd"
      Matrix="
        0.193681  0 0 0
        0 0.193681  0 0
        0 0 0.193681  0
        0 0 0 1" />
  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
        <Transform Name="TransdToReference" />
        <xxTransform Name="ImageToTransd" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
        <xxImage Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
